PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1500, 700]
  expName = workprimingtask
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine TestRoutine
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_i_n'},
      {'test': '_ia_o'},
      {'test': 'b_t_l_'},
      {'test': 'p_n'},
      {'test': 'li_e'},
      {'test': '_a_t_p '},
      {'test': 'hi_to_y'}]
    Routine TestRoutine
  LoopTerminator trials_2
